PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'ID': '', 'Audio': "['Yes', 'No']", 'Debug': "['Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources\\aud\\Replay instructions.m4a', 'resources\\seqs\\conditions.csv', 'resources\\aud\\S-CLAS Intro.m4a', 'resources\\aud\\S-CLAS Q01.m4a', 'resources\\aud\\S-CLAS Q02.m4a', 'resources\\aud\\S-CLAS Q03.m4a', 'resources\\aud\\S-CLAS Q04.m4a', 'resources\\aud\\S-CLAS Q05.m4a', 'resources\\aud\\S-CLAS Q06.m4a', 'resources\\aud\\S-CLAS Q07.m4a', 'resources\\aud\\S-CLAS Q08.m4a', 'resources\\aud\\S-CLAS Q09a.m4a', 'resources\\aud\\S-CLAS Q09b.m4a', 'resources\\aud\\S-CLAS Q09c.m4a', 'resources\\aud\\S-CLAS Q10.m4a', 'resources\\aud\\S-CLAS Q11.m4a', 'resources\\aud\\S-CLAS Q12.m4a', 'resources\\aud\\S-CLAS Q13.m4a', 'resources\\aud\\S-CLAS Q14.m4a', 'resources\\imgs\\slides\\slide-01.png', 'resources\\imgs\\slides\\slide-02.png', 'resources\\imgs\\slides\\slide-03.png', 'resources\\imgs\\slides\\slide-04.png', 'resources\\imgs\\slides\\slide-05.png', 'resources\\imgs\\slides\\slide-06.png', 'resources\\imgs\\slides\\slide-07.png', 'resources\\imgs\\slides\\slide-08.png', 'resources\\imgs\\slides\\slide-09.png', 'resources\\imgs\\slides\\slide-10.png', 'resources\\imgs\\slides\\slide-11.png', 'resources\\imgs\\slides\\slide-12.png', 'resources\\imgs\\slides\\slide-13.png', 'resources\\imgs\\slides\\slide-14.png', 'resources\\imgs\\slides\\slide-15.png', 'resources\\imgs\\slides\\slide-16.png', 'resources\\imgs\\slides\\slide-17.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = S-CLAS
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Routines
  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Might want to remove audio toggle eventually
        #expInfo["Debug"] = "No"
        #expInfo["Audio"] = "Yes"

        expVersion = "2022.09.20"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        SLIDES_DIR = f"{IMGS_DIR}/slides"
        SEQ_FILE = "resources/seqs/conditions.csv"

        USE_AUDIO = expInfo["Audio"] == "Yes"
        SHOW_DEBUG = expInfo["Debug"] == "Yes"

        CLICK_BOX_OPACITY = 0.5 if SHOW_DEBUG else 0

        """
        Slides are 1052 x 745 pixels.
        Positions and sizes of clickable areas are hard
        coded, so changing this will break _everything_!

        """
        SLIDE_H = 0.7
        SLIDE_W = SLIDE_H / 745 * 1052
        SLIDE_SIZE = (SLIDE_W, SLIDE_H)

        # "Next" button at top-right
        NEXT_POS = (0.39, 0.265)
        NEXT_SIZE = (0.165, 0.075)
        NEXT = make_rect("next", NEXT_POS, NEXT_SIZE, CLICK_BOX_OPACITY)

        # "Replay" button at top-left
        REPLAY_POS = (-0.376, 0.265)
        REPLAY_SIZE = (0.165, 0.075)
        REPLAY = make_rect("replay", REPLAY_POS, REPLAY_SIZE, CLICK_BOX_OPACITY)

        # For covering "Next" button
        COVER_SIZE = (0.17, 0.08)
        COVER = make_rect("cover", NEXT_POS, COVER_SIZE, None, "white", "white", 0)

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None

        all_cimgs = {
            "02": get_trees,
            "03": get_vehicles,
            "04": get_speed,
            "05": get_weight,
            "06": get_weather,
            "07": get_tools,
            "08": get_carrots,
            "09": get_badminton,
            "10": get_prepositions1,
            "11": get_prepositions2,
            "12": get_room1,
            "13": get_pen1,
            "14": get_pen2,
            "15": get_animals,
            "16": get_look,
            "17": get_mice,
        }
      Begin Routine:
        slide = make_slide("01")
        slide.autoDraw = True
        NEXT.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/S-CLAS Intro.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND.play()
      Each Frame:
        # Clicking on "Next" is always enabled here
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            print(f"MOUSE_L_prev = {MOUSE_L_prev}; "
                  f"MOUSE_L = {MOUSE_L}")
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L and NEXT.contains(MOUSE):
                continueRoutine = False
      End Routine:
        NEXT.autoDraw = False
        slide.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(num, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                f"slide-{num}",
                f"{SLIDES_DIR}/slide-{num}.png",
                pos, size, 1
            )

        def make_rect(
            name, pos, size, opacity,
            fillColor=None,
            lineColor="red",
            lineWidth=3
        ):
            return visual.Rect(
                win=win,
                name=name,
                width=size[0],
                height=size[1],
                pos=pos,
                lineWidth=lineWidth,
                lineColor=util.Color(lineColor),
                fillColor=fillColor,
                opacity=opacity
            )

        def make_boxes(names, xys, sizes, opacity=CLICK_BOX_OPACITY):
            cimgs = []
            for i in range(len(names)):
                cimgs.append(make_rect(names[i], xys[i], sizes[i], opacity))
            return cimgs

        def make_circle(
            name, pos, size,
            fillColor="black",
            lineColor="black",
            lineWidth=3,
            opacity=1
        ):
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            return visual.Polygon(
                win=win,
                name=name,
                edges=360,
                size=size,
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_radio0(name, pos):
            return make_circle(name, pos, (0.03, 0.03), None, "black")

        def make_radio1(name, pos):
            return make_circle(name, pos, (0.023, 0.023), "black", None, 0)

        def find_min_y(cimgs):
            min_y = 0.5
            for cimg in cimgs:
                y = cimg.pos[1] - (cimg.height / 2)
                if min_y > y:
                    min_y = y
            return min_y
    CodeComponent functions_l
      Code Type = Auto->JS
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      Begin Experiment:
        # S-CLAS

        def get_trees():
            # Slide 02
            names = ("tree1", "tree2", "tree3", "tree4")
            xys = [(-0.326, -0.1), (-0.087, -0.195), (0.135, -0.163), (0.367, -0.18)]
            sizes = [(0.23, 0.38), (0.115, 0.185), (0.16, 0.25), (0.132, 0.215)]
            return make_boxes(names, xys, sizes)

        def get_vehicles():
            # Slide 03
            names = ("car", "ball", "bicycle", "bus")
            y0 = -0.178
            xys = [(-0.374, y0 + 0.002), (-0.153, y0 + 0.001), (0.08, y0), (0.3425, y0)]
            sizes = [(0.176, 0.129), (0.18, 0.13), (0.21, 0.135), (0.235, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_speed():
            # Slide 04
            names = ("faster", "big", "slow", "old")
            y0 = -0.219
            xys = [(-0.37, y0), (-0.149, y0), (0.083, y0 - 0.003), (0.338, y0 - 0.003)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.21, 0.13), (0.217, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_weight():
            # Slide 05
            names = ("dark", "heavy", "smooth", "grey")
            y0 = -0.255
            xys = [(-0.37, y0), (-0.149, y0), (0.083, y0 - 0.003), (0.338, y0 - 0.003)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.21, 0.13), (0.217, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_weather():
            # Slide 06
            names = ("cloudy", "sunny", "rainy")
            y0 = -0.162
            xys = [(-0.36, y0 + 0.005), (-0.143, y0), (0.111, y0)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.208, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_tools():
            # Slide 07
            names = ("scissors", "nail", "tweezers", "tongs")
            y0 = -0.133
            xys = [(-0.37, y0 + 0.003), (-0.149, y0), (0.083, y0), (0.347, y0)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.21, 0.13), (0.235, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_carrots():
            # Slide 08
            names = ("he", "she", "they", "one_carrot")
            y0 = -0.163
            h0 = 0.245
            xys = [(-0.34, y0), (-0.13, y0), (0.11, y0 + 0.002), (0.347, y0 + 0.002)]
            sizes = [(0.19, h0), (0.19, h0), (0.24, h0), (0.19, h0)]
            return make_boxes(names, xys, sizes)

        def get_badminton():
            # Slide 09
            names = ("playing", "played")
            y0 = -0.252
            h0 = 0.09
            xys = [(-0.255, y0), (0.27, y0)]
            sizes = [(0.4, h0), (0.37, h0)]
            return make_boxes(names, xys, sizes)

        def get_prepositions1():
            # Slide 10
            names = ("at", "on", "in", "above")
            y0 = -0.255
            xys = [(-0.37, y0), (-0.149, y0), (0.083, y0 - 0.003), (0.339, y0 - 0.003)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.208, 0.13), (0.217, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_prepositions2():
            # Slide 11
            names = ("at", "on", "in", "under")
            y0 = -0.255
            xys = [(-0.37, y0), (-0.149, y0), (0.083, y0 - 0.003), (0.339, y0 - 0.003)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.208, 0.13), (0.217, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_room1():
            # Slide 12
            names = ("duck", "apple", "bear", "cup")
            y0 = -0.255
            xys = [(-0.37, y0), (-0.149, y0), (0.083, y0 - 0.003), (0.339, y0 - 0.003)]
            sizes = [(0.172, 0.125), (0.177, 0.13), (0.208, 0.13), (0.217, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_pen1():
            # Slide 13
            names = ("P", "M", "N", "B")
            y0 = -0.214
            w0 = 0.123
            h0 = 0.149
            xys = [(-0.35, y0), (-0.128, y0), (0.107, y0), (0.338, y0)]
            sizes = [(w0, h0), (w0, h0), (w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_pen2():
            # Slide 14
            names = ("P", "M", "N", "B")
            y0 = -0.195
            w0 = 0.123
            h0 = 0.149
            xys = [(-0.35, y0), (-0.128, y0), (0.107, y0), (0.338, y0)]
            sizes = [(w0, h0), (w0, h0), (w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_animals():
            # Slide 15
            names = ("monkey", "goose")
            y0 = -0.138
            h0 = 0.227
            xys = [(0.043, y0), (0.315, y0)]
            sizes = [(0.16, h0), (0.25, h0)]
            return make_boxes(names, xys, sizes)

        def get_look():
            # Slide 16
            names = ("leaf", "cup", "book")
            y0 = -0.14
            xys = [(-0.09, y0 + 0.003), (0.125, y0 + 0.018), (0.35, y0)]
            sizes = [(0.135, 0.135), (0.12, 0.17), (0.19, 0.16)]
            return make_boxes(names, xys, sizes)

        def get_mice():
            # Slide 17
            names = ("car", "rice", "map")
            y0 = -0.14
            xys = [(-0.075, y0), (0.15, y0 + 0.023), (0.368, y0)]
            sizes = [(0.21, 0.09), (0.155, 0.165), (0.18, 0.155)]
            return make_boxes(names, xys, sizes)
    TextComponent begin_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        cimgs = []
        cimg_names = []
        response = None
        has_responded = False

        # Add leading '0's (_must_ be done)
        slide_num = f"0{slideNum}" if len(str(slideNum)) == 1 else str(slideNum)
        qn_num = f"0{qnNum}" if len(str(qnNum)) == 1 else str(qnNum)

        slide = make_slide(slide_num)
        slide.autoDraw = True

        cimgs = all_cimgs[slide_num]()
        min_y = find_min_y(cimgs)
        radio_y = min_y - 0.05
        radio0s = []
        radio1s = []
        for cimg in cimgs:
            cimg.autoDraw = True
            radio0s.append(make_radio0(
                cimg.name,
                (cimg.pos[0], radio_y)
            ))
            radio0s[-1].autoDraw = True
            radio1s.append(make_radio1(
                cimg.name,
                (cimg.pos[0], radio_y)
            ))

        REPLAY.autoDraw = True
        NEXT.autoDraw = True
        COVER.autoDraw = True
        COVER.opacity = 0.9

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/S-CLAS Q{qn_num}.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_START = 0
            SOUND.play()

        if SHOW_DEBUG:
            cimg_names = []
            for i in range(len(cimgs)):
                cimg_names.append(cimgs[i].name)
      Each Frame:
        # Adding block comment here will screw everything
        # up! Bet you didn't know that.

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            print(f"MOUSE_L_prev = {MOUSE_L_prev}; "
                  f"MOUSE_L = {MOUSE_L}")
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L:
                if has_responded and NEXT.contains(MOUSE):
                    continueRoutine = False
                if REPLAY.contains(MOUSE):
                    if t - SOUND_START < SOUND_DUR:
                        # Will only work if the sound has not finished
                        SOUND.stop()
                    SOUND = make_sound("sound", aud_file)
                    SOUND_START = t
                    SOUND.play()
                for i in range(len(cimgs)):
                    if cimgs[i].contains(MOUSE) or radio0s[i].contains(MOUSE):
                        if not has_responded:
                            has_responded = True
                            COVER.autoDraw = False
                            COVER.opacity = 0
                        response = cimgs[i].name
                        for radio in radio1s:
                            radio.autoDraw = False
                            if response == radio.name:
                                radio.autoDraw = True

        if SOUND_START == 0 and t > SOUND_DUR:
            SOUND = make_sound("sound", f"{AUD_DIR}/Replay instructions.m4a")
            SOUND_START = t
            SOUND.play()

        if SHOW_DEBUG:
            trial_text.text = f"""
        taskName = {taskName}
        aud_file = {aud_file}
        slide_num = {slide_num}
        qn_num = {qn_num}
        cimg_names = {cimg_names}
        corrAns = {corrAns}
        response = {response}
        has_responded = {has_responded}
        min_y = {round(min_y, 3)}
        t = {round(t, 3)}
        """
      End Routine:
        if USE_AUDIO:
            SOUND.stop()

        for cimg in cimgs:
            cimg.size = (0, 0)
            cimg.autoDraw = False
        for radio in radio0s:
            radio.size = (0, 0)
            radio.autoDraw = False
        for radio in radio1s:
            radio.size = (0, 0)
            radio.autoDraw = False

        slide.size = (0, 0)
        slide.autoDraw = False
        NEXT.autoDraw = False
        REPLAY.autoDraw = False

        # Record timestamp and total time
        is_correct = 1 if response == corrAns else 0
        thisExp.addData("response", response)
        thisExp.addData("is_correct", is_correct)
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())
    CodeComponent anim_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        redbox_targets = []
        redbox_times = []
        redbox_target = None
        redbox_time = None
        red_box = None

        # Orders are reversed since we're using .pop()
        # Read the following right-to-left!
        ALL_REDBOX_TARGETS = {
        #    "39": ["heavy", "happy", "slow"],
        #    "40": ["big", "dark", "heavy"],
            "44": ["played", "playing"],
        #    "45": ["or", "and", "with"],
        #    "46": ["underneath", "below", "on", "under", "beside", "at", "above"],
        #    "48": ["cup", "duck", "apple", "vase"],
            "51": ["boy_is", "boys_are"],
            "52": ["smell", "smelly"],
            "53": ["book", "cup", "leaf"],
            "54": ["dice", "map", "rice"],
            "55": ["car", "house", "mat"],
        #    "56": ["sunshine", "shine", "sun"],
        #    "57": ["bow", "ox", "box"],
            "61": ["goose", "monkey"],
        #    "62": ["under", "untie", "undo"],
        #    "63": ["moonset", "moonlight", "moondown"],
            "64": ["resmall", "rethink", "reheart"],
        #    "65": ["sandless", "sandful", "sandy"],
        }

        ALL_REDBOX_TIMES = {
        #    "39": [5.2, 4.3, 3.7, 3.0],
        #    "40": [4.8, 4.0, 3.2, 2.5],
            "44": [10.8, 7.4, 4.1],
        #    "45": [13.0, 10.9, 8.0, 5.0],
        #    "46": [9.8, 8.8, 8.0, 7.2, 6.5, 5.8, 5.0, 4.2],
        #    "48": [7.7, 7.0, 6.3, 5.2, 4.3],
            "51": [7.2, 5.9, 4.0],
            "52": [7.5, 5.6, 3.9],
            "53": [6.4, 5.4, 4.4, 3.4],
            "54": [6.6, 5.6, 4.6, 3.6],
            "55": [6.5, 5.0, 4.5, 3.5],
        #    "56": [8.6, 7.6, 6.6, 5.6],
        #    "57": [6.3, 5.5, 4.7, 3.8],
            "61": [5.8, 5.1, 4.0],
        #    "62": [11.0, 10.3, 9.5, 8.5],
        #    "63": [9.8, 8.8, 7.8, 6.8],
            "64": [8.8, 7.7, 6.8, 5.8],
        #    "65": [8.1, 7.2, 6.3, 5.3],
        }
      Begin Routine:
        if USE_AUDIO:
            if slide_num in ALL_REDBOX_TARGETS:
                redbox_targets = ALL_REDBOX_TARGETS[slide_num]
                redbox_times = ALL_REDBOX_TIMES[slide_num]
                redbox_target = redbox_targets.pop()
                redbox_time = redbox_times.pop()
                red_box = make_box("red_box", (0, 0), (0, 0), 1)

        #    if slide_num in [
        #        "44", "45", "46", "48",
        #        "51", "52", "56", "57",
        #        "62", "63", "64", "65"
        #    ]:
        #        red_box = make_box("red_box", (0, 0), (0, 0), 1, "-1to5")
        #    else:
        #        red_box = make_box("red_box", (0, 0), (0, 0), 1)
      Each Frame:
        if USE_AUDIO:
            if len(redbox_targets) > 0:
                if t >= redbox_time:
                    for cimg in cimgs:
                        if cimg.name == redbox_target:
                            red_box.pos = cimg.pos
                            unhide(red_box, cimg.size)
                            break
                    redbox_target = redbox_targets.pop()
                    redbox_time = redbox_times.pop()
            elif len(redbox_times) > 0:
                if t >= redbox_time:
                    for cimg in cimgs:
                        if cimg.name == redbox_target:
                            red_box.pos = cimg.pos
                            unhide(red_box, cimg.size)
                            break
                    redbox_time = redbox_times.pop()
            else:
                if redbox_time is not None and t >= redbox_time:
                    hide(red_box)
    TextComponent trial_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:
    conditionsFile = $SEQ_FILE
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
